OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.1)

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0x341d3912 Temporal Filter
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 0.1
  High Cut-off Frequency (Hz) = 50
Lua Stimulator => #2
  Lua Script = D:/sharegit/SomaStim/openvibe/Aire_20st.lua
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulation=#2 -> 0x341d3912 GDF file writer
  Filename = D:/Neuro/Data/Aire-[$core{date}-$core{time}].gdf
#2 -> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
Input stimulations=#2 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#2 -> Run Command
  Stimulation 1 = 33084
  Command 1 = wt D:/Miniconda/python.exe d:/sharegit/SomaStim/python/conection_ov_ino.py COM13
Sinus oscillator => #7
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Data=#7, Stimulations=#2, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
